############################
# DEFINIÇÃO DAS GEOMETRIAS #
############################

s:Ge/World/Material = "Vacuum"
s:Ge/World/Type     = "TsBox"
d:Ge/World/HLX      = 2.5 m
d:Ge/World/HLY      = 2.5 m
d:Ge/World/HLZ      = 2.5 m

s:Ge/Skull/Type     = "TsBox"
s:Ge/Skull/Parent   = "World"
#s:Ge/Skull/Material = "G4_WATER"
s:Ge/Skull/Material = "G4_B-100_BONE"
d:Ge/Skull/HLX      = 9. cm       #Y rotacionado para X
d:Ge/Skull/HLY      = 11. cm      #Z rotacionado para Y
d:Ge/Skull/HLZ      = 0.4 cm      #X rotacionado para Z
i:Ge/Skull/XBins    = 1
i:Ge/Skull/YBins    = 1
i:Ge/Skull/ZBins    = 1
d:Ge/Skull/RotX     = 180. deg
d:Ge/Skull/RotY     = 0. deg
d:Ge/Skull/RotZ     = 0. deg
d:Ge/Skull/TransX   = 0. cm
d:Ge/Skull/TransY   = 0. cm
d:Ge/Skull/TransZ   = Ge/Brain/HLZ + Ge/Skull/HLZ cm

s:Ge/Brain/Type     = "TsBox"
s:Ge/Brain/Parent   = "World"
s:Ge/Brain/Material = "G4_WATER"
d:Ge/Brain/HLX      = 9. cm       #Y rotacionado para X
d:Ge/Brain/HLY      = 11. cm      #Z rotacionado para Y
d:Ge/Brain/HLZ      = 6. cm       #X rotacionado para Z
i:Ge/Brain/XBins    = 1
i:Ge/Brain/YBins    = 1
i:Ge/Brain/ZBins    = 1
d:Ge/Brain/RotX     = 180. deg
d:Ge/Brain/RotY     = 0. deg
d:Ge/Brain/RotZ     = 0. deg

s:Ge/Dosimeter/Type       = "TsBox"
s:Ge/Dosimeter/Parent     = "World"
b:Ge/Dosimeter/IsParallel = "True"
d:Ge/Dosimeter/HLX        = 1. cm
d:Ge/Dosimeter/HLY        = 1. cm
d:Ge/Dosimeter/HLZ        = 6.4 cm
i:Ge/Dosimeter/XBins      = 1
i:Ge/Dosimeter/YBins      = 1
i:Ge/Dosimeter/ZBins      = 512
d:Ge/Dosimeter/RotX       = 180. deg
d:Ge/Dosimeter/RotY       = 0. deg
d:Ge/Dosimeter/RotZ       = 0. deg
d:Ge/Dosimeter/TransX     = 0. cm
d:Ge/Dosimeter/TransY     = 0. cm
d:Ge/Dosimeter/TransZ     = Ge/Skull/HLZ cm


#############
# AQUISIÇÃO #
#############

s:Sc/exp_1/Quantity                  = "DoseToMedium"
s:Sc/exp_1/Component                 = "Dosimeter"
s:Sc/exp_1/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/exp_1/OutputToConsole           = "False"
s:Sc/exp_1/OutputFile                = "Bone_120"


#########
# FEIXE #
#########

s:Ge/BeamPosition/Parent = "World"
s:Ge/BeamPosition/Type   = "Group"
d:Ge/BeamPosition/TransX = 0. m
d:Ge/BeamPosition/TransY = 0. m
d:Ge/BeamPosition/TransZ = Ge/Skull/TransZ + 100. cm
d:Ge/BeamPosition/RotX   = 180. deg
d:Ge/BeamPosition/RotY   = 0. deg
d:Ge/BeamPosition/RotZ   = 0. deg

s:So/HeavyParticleSource/Type         = "Beam"
s:So/HeavyParticleSource/Component    = "BeamPosition"

s:So/HeavyParticleSource/BeamParticle = "proton"
d:So/HeavyParticleSource/BeamEnergy   = 120 MeV

#s:So/HeavyParticleSource/BeamPositionDistribution = "None"
s:So/HeavyParticleSource/BeamPositionDistribution = "Gaussian"
s:So/HeavyParticleSource/BeamPositionCutoffShape  = "Ellipse"
d:So/HeavyParticleSource/BeamPositionCutoffX      = 1. cm
d:So/HeavyParticleSource/BeamPositionCutoffY      = 1. cm
d:So/HeavyParticleSource/BeamPositionSpreadX      = 0.15 * So/HeavyParticleSource/BeamPositionCutoffX cm
d:So/HeavyParticleSource/BeamPositionSpreadY      = 0.15 * So/HeavyParticleSource/BeamPositionCutoffY cm

s:So/HeavyParticleSource/BeamAngularDistribution = "None"
#s:So/HeavyParticleSource/BeamAngularDistribution = "Gaussian"
#d:So/HeavyParticleSource/BeamAngularCutoffX = 0.1 deg
#d:So/HeavyParticleSource/BeamAngularCutoffY = 0.1 deg
#d:So/HeavyParticleSource/BeamAngularSpreadX = 0.18 deg
#d:So/HeavyParticleSource/BeamAngularSpreadY = 0.18 deg


#############
# HISTÓRIAS #
#############

i:So/HeavyParticleSource/NumberOfHistoriesInRun   = 100 * Ts/ShowHistoryCountAtInterval
i:Ts/ShowHistoryCountAtInterval                   = 10


#####################
# OUTROS PARÂMETROS #
#####################

i:Ts/NumberOfThreads = 0

#b:Ts/UseQt = "True"

#u:Gr/ViewA/Zoom        = 1
#s:Gr/ViewA/Type        = "OpenGL"
#i:Gr/ViewA/WindowSizeX = 900
#i:Gr/ViewA/WindowSizeY = 900
#d:Gr/ViewA/Theta       = 60 deg
#d:Gr/ViewA/Phi         = 30 deg
#i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 1

#b:Ts/PauseBeforeQuit = "TRUE"


